PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = numerosity
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent Start
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent Stimulus
      stopVal [duration (s)] = 15
      startEstim = 0.5
      startVal [time (s)] = 0.5
      image [set every repeat] = $file
      size = [1.7, 1.7]
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    KeyboardComponent Response
      correctAns = $correct
      storeCorrect = True
      stopVal [duration (s)] = 15
      forceEndRoutine = True
      startEstim = 0.5
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.5
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Flow
  LoopInitiator Trials loopType="TrialHandler"
    conditionsFile = ../../../final/conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'n1': 32, 'n2': 38, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im17.png'},
      {'n1': 116, 'n2': 112, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im63.png'},
      {'n1': 142, 'n2': 134, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im67.png'},
      {'n1': 133, 'n2': 119, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im58.png'},
      {'n1': 46, 'n2': 43, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im22.png'},
      {'n1': 20, 'n2': 24, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im9.png'},
      {'n1': 151, 'n2': 162, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im70.png'},
      {'n1': 92, 'n2': 99, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im51.png'},
      {'n1': 151, 'n2': 142, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im68.png'},
      {'n1': 127, 'n2': 121, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im65.png'},
      {'n1': 66, 'n2': 61, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im34.png'},
      {'n1': 25, 'n2': 27, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im13.png'},
      {'n1': 58, 'n2': 56, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im31.png'},
      {'n1': 92, 'n2': 87, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im49.png'},
      {'n1': 112, 'n2': 114, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im61.png'},
      {'n1': 87, 'n2': 79, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im37.png'}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
    Routine trial
  LoopTerminator Trials
